PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 600]
  color = $[0.859,0.639,0.380]
  expName = survey
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Routines
  Routine trial
    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      opacity = 0.5
      pos = (0, 0.25)
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent questionText
      color = black
      letterHeight = 0.05
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
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    SliderComponent slider
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = '1 \r\n \r\n del tutto  \r\n inaccettabile', '2', '3', '4 \r\n \r\n usa tutta  \r\n la scala!', '5', '6', '7 \r\n \r\n del tutto  \r\n accettabile'
      pos = (0, -0.2)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = ('radio',)
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'space',
      forceEndRoutine = False
      startVal [condition] = slider.rating
      store = nothing
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    CodeComponent anticheat
      Code Type = Auto->JS
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      Begin Experiment:
        kickout_count = 0
      Begin Routine:
        msg_kickout="Risposte sbagliate: "+str(kickout_count)+". Hai a disposizione altri "+str(5-kickout_count)+" tentativi."
      Each Frame:
        #msg_kickout = ""

        if slider.getRating() is not None:
            cond_filler= (kind=="FILLER" and slider.getRating()>3.0)
            cond_control = (kind=="CONTROL" and slider.getRating()<5.0)
            if key_resp_4.keys == "space":
                if cond_filler or cond_control:
                    #msg_kickout="iiiii "+str(kickout_count)
                    msg_kickout="Attenzione! Questa è una domanda di controllo, la tua risposta è errata. Clicca su un altro punteggio! L'esperimento continuerà quando fornirai una risposta adeguata."
                    if kickout_count == 5:
                        psychoJS.quit()
                else:
                    #msg_kickout="Ottimo lavoro!"
                    continueRoutine = False
      End Routine:
        if msg_kickout == "Attenzione! Questa è una domanda di controllo, la tua risposta è errata. Clicca su un altro punteggio! L'esperimento continuerà quando fornirai una risposta adeguata.":
            kickout_count += 1
        else:
            msg_kickout = msg_kickout
    TextComponent tips
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Clicca su un valore, poi premi SPAZIO per continuare.
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    CodeComponent pleasework
      Code Type = Auto->JS
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      Begin Experiment:
        exp_target_loop = 0;
      Begin Routine:
        feedbackMsg = 'hai completato ' + str(exp_target_loop) +' frasi su ' + str(trials.nTotal) +'!'
      End Routine:
        exp_target_loop += 1;
    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedbackMsg
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    TextComponent title
      color = $[0.004,-0.749,-0.749]
      letterHeight = 0.035
      pos = (-0.35, 0.45)
      startVal [time (s)] = 0.0
      text = Questo è l'esperimento vero e proprio!
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    TextComponent text_3
      color = $[-0.663,-0.890,-0.890]
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $msg_kickout
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    PolygonComponent polygon_5
      fillColor = $[0.859,-0.914,-0.914]
      lineColor = $[0.859,-0.914,-0.914]
      opacity = 0.3
      pos = (0, 0.1)
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 0.0
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  Routine consent
    TextComponent form
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Nel questionario non ti saranno chieste informazioni personali. Non sarà possibile per nessuno risalire alla tua identità a partire dalle risposte che darai nel questionario. I dati che fornirai saranno usati ai fini di questo esperimento linguistico e potranno essere condivisi con terzi in forma anonima. Completando il questionario, dichiari di accettare questi termini. Se abbandoni il questionario in anticipo, i tuoi dati non saranno usati nello studio e non riceverai alcun compenso.

        Dovrai usare un computer con tastiera!
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if key_resp.keys == "n":
            #core.quit()
            psychoJS.quit()
        elif key_resp.keys == "y":
            continueRoutine = True
    PolygonComponent polygon
      fillColor = $[1,1,1]
      opacity = 0.5
      pos = (0, -0.4)
      shape = rectangle
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent accept_or_no
      color = black
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Premi Y per continuare o N per uscire.
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  Routine instr
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      opacity = 0.5
      pos = (0, -0.4)
      shape = rectangle
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent instr_allow
      color = black
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Premi Y per continuare o N per uscire.
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    TextComponent instructions
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrflow
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if key_resp_3.keys == "n":
            #core.quit()
            psychoJS.quit()
        elif key_resp_3.keys == "y":
            continueRoutine = True
  Routine thanks
    TextComponent text_9
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        startTime = new Date();
        text_9.text = ''
      Begin Routine:
        text_9.text = ''
      Each Frame:
        text_9.text = str(round(5+routineTimer.getTime()))
      Each JS Frame:
        leftTime = new Date();
        timeelapsed = (startTime - leftTime)/1000
        text_9.text = Math.round(5+timeelapsed)
    TextComponent goodbye
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Grazie per la collaborazione!

        Il questionario finirà tra
  Routine demo
    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      opacity = 0.5
      pos = (0, -0.2)
      shape = rectangle
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent democheck
      color = black
      letterHeight = 0.07
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Premi Y per rispondere "sì" o N per rispondere "no".
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    TextComponent survey
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent key_resp_2
      allowedKeys = 'y', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_2.keys == "n":
            #core.quit()
            psychoJS.quit()
        elif key_resp_2.keys == "y":
            continueRoutine = True
  Routine train
    PolygonComponent polygon_6
      fillColor = $[1,1,1]
      opacity = 0.5
      pos = (0, 0.2)
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent questionText_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $trainer
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    SliderComponent slider_2
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = '1 \r\n \r\n del tutto  \r\n inaccettabile', '2', '3', '4', '5', '6', '7 \r\n \r\n del tutto  \r\n accettabile'
      pos = (0, -0.2)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    CodeComponent anticheat_2
      Code Type = Auto->JS
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      Each Frame:
        msg = "Clicca su un valore e premi F per continuare"
        if slider_2.getRating() is not None:
            cond_filler2= (kind2=="BAD" and slider_2.getRating()>2.0)
            cond_control2= (kind2=="GOOD" and slider_2.getRating()<6.0)
            if key_resp_6.keys == "f":
                if cond_filler2 or cond_control2:
                    #continueRoutine = True
                    msg = "Oh, no! Prova di nuovo e premi F sulla tastiera"
                else:
                    #continueRoutine = False
                    msg = "Sì! Premi SPAZIO per continuare"
            if key_resp_6.keys == "space":
                continueRoutine = False
    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = 'space','f'
      forceEndRoutine = False
      startVal [condition] = slider_2.rating
      store = nothing
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    TextComponent tips_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Questa è una sessione di allenamento. Prova quante volte vuoi!
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    TextComponent text
      color = $[-0.663,-0.890,-0.890]
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $msg
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Flow
  Routine consent
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = resources/instructions_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instrflow', 'This survey takes - minutes on average to complete, and you will be rewarded € -.- as compensation if you complete the survey. \\r\n \\r\n You will see a series of sentences, one by one. For each, you are asked to judge how acceptable it is to you on a graded scale. You should rate a sentence 1 if it sounds utterly bad, 7 if it sounds perfectly fine, or choose any in-between score if you think it applies.')]),
      OrderedDict([('instrflow', 'Let us consider some examples: \\r\n \\r\n > John laughs stories.\\r\n This sentence should score 1, because you can’t "laugh something". \\r\n \\r\n > Mario walked on the path. \\r\n This sentence should score 7, because it’s perfectly acceptable.')]),
      OrderedDict([('instrflow', 'This is not an exam! By virtue of being a native speaker of English, you will provide the right answers. Beware: to avoid cheating and random clicking, the survey is interspersed with hidden control questions. If you fail them, you will be kicked out of the survey and receive no compensation.')])]
    Routine instr
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = resources/demographics.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('question', 'Are you a native speaker of English?')]),
      OrderedDict([('question', 'Have you got a Bachelor’s (or higher) degree?')]),
      OrderedDict([('question', 'Have you understood the instructions above?')])]
    Routine demo
  LoopTerminator trials_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = resources/trainers.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ids', 'train1'), ('trainer', 'N1 Mario ha mangiato.')]),
      OrderedDict([('ids', 'train2'), ('trainer', 'N2 Mario ha dormito un cuscino.')])]
    Routine train
  LoopTerminator trials_4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/stimuli_ita.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ids', 'stim1'), ('kind', 'none'), ('verb', 'break'), ('dObj', 'yes'), ('perf', 'yes'), ('iter', 'yes'), ('sentence', 'Betty had broken a vase again.')]),
      OrderedDict([('ids', 'stim2'), ('kind', 'CONTROL'), ('verb', 'break'), ('dObj', 'yes'), ('perf', 'yes'), ('iter', 'no'), ('sentence', 'Betty had broken a vase.')]),
      OrderedDict([('ids', 'stim3'), ('kind', 'none'), ('verb', 'break'), ('dObj', 'yes'), ('perf', 'no'), ('iter', 'yes'), ('sentence', 'Tom was breaking a vase again.')]),
      OrderedDict([('ids', 'stim4'), ('kind', 'CONTROL'), ('verb', 'break'), ('dObj', 'yes'), ('perf', 'no'), ('iter', 'no'), ('sentence', 'Sean was breaking a vase.')]),
      OrderedDict([('ids', 'stim5'), ('kind', 'EXP'), ('verb', 'break'), ('dObj', 'no'), ('perf', 'yes'), ('iter', 'yes'), ('sentence', 'Tom had broken again.')]),
      OrderedDict([('ids', 'stim6'), ('kind', 'EXP'), ('verb', 'break'), ('dObj', 'no'), ('perf', 'yes'), ('iter', 'no'), ('sentence', 'Diana had broken.')]),
      OrderedDict([('ids', 'stim7'), ('kind', 'EXP'), ('verb', 'break'), ('dObj', 'no'), ('perf', 'no'), ('iter', 'yes'), ('sentence', 'Sam was breaking again.')]),
      OrderedDict([('ids', 'stim8'), ('kind', 'EXP'), ('verb', 'break'), ('dObj', 'no'), ('perf', 'no'), ('iter', 'no'), ('sentence', 'John was breaking.')]),
      OrderedDict([('ids', 'stim9'), ('kind', 'none'), ('verb', 'build'), ('dObj', 'yes'), ('perf', 'yes'), ('iter', 'yes'), ('sentence', 'Mary had built a house again.')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
